PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'dev_mode': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = image_gen_cma
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
      Begin Routine:
        ## Generate batch of images

        ## Variables
        iteration = generations.thisN
        trial = trials.thisN
        embedding = this_gen_embeddings[trial, :]

        ## Set image
        image_name = f"images/num-{trial}.png"
      End Routine:
        ## Update output matrices
        all_embeddings[iteration,trial,:] = embedding
        all_ratings[iteration,trial] = slider.getRating()
    SliderComponent slider
      borderColor = Black
      fillColor = DarkGray
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent image
      image [set every repeat] = $image_name
      pos = (0, 0.05)
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
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  Routine washout
    TextComponent text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine generating
    TextComponent text_2
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Generating images...
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    CodeComponent generate_images
      Code Type = Py
      Before Experiment:
        #### Start of experiment

        ## Import packages
        import torch
        import numpy as np
        from diffusers import StableUnCLIPImg2ImgPipeline

        ## Set variables
        global model_path
        model_path = "path_to_model"
        global diffusion_steps
        diffusion_steps = 21


        global max_iters
        max_iters = 3
        global pop_size
        pop_size = 8
        global mutation_rate
        mutation_rate = 0.05
        global mutation_size
        mutation_size = 1
        global vec_size
        vec_size = 768

        this_gen_embeddings = np.zeros((pop_size, vec_size))
        parent_1 = np.zeros((1, vec_size))
        parent_2 = np.zeros((1, vec_size))

        all_embeddings = np.zeros((max_iters, pop_size, vec_size))
        all_ratings = np.zeros((max_iters, pop_size))

        ## Classes
        class Image(visual.ImageStim):
            # Embedding property
            embedding = None

        ## Functions
        def generate_image(embedding, image_name):
            # Ensure correct size and datatype
            embedding = torch.tensor(np.reshape(embedding, (1,np.size(embedding))), dtype=torch.float16)
            embedding = embedding.to(device)
            # Generate and save image
            images = pipe(image_embeds=embedding, num_inference_steps=diffusion_steps).images
            images[0].save(image_name)

        def generate_children(parent_1, parent_2):
            embeddings = np.zeros((8, vec_size))
            parent_1 = parent_1.reshape((1,vec_size))
            parent_2 = parent_2.reshape((1,vec_size))

            # Generate recombinations
            for i in range(8):
                child = np.zeros((1, vec_size))
                for j in range(vec_size):
                    choice = np.random.random()
                    if choice <= 0.5:
                        child[0,j] = parent_1[0,j]
                    else:
                        child[0,j] = parent_2[0,j]
                embeddings[i,:] = child

            # Add mutations
            y = np.random.uniform(-mutation_size, mutation_size, size=(8, vec_size))
            z = np.random.binomial(1, mutation_rate, size=(8, vec_size))
            # Create mutation vec
            mutation = np.multiply(y, z)
            # Add to pop
            embeddings = np.add(embedding, mutation)

            return embeddings
      Begin Experiment:
        global dev_mode
        dev_mode = int(expInfo['dev_mode'])

        ## Set unCLIP device
        if not dev_mode:
            global device
            device = torch.device('cuda' if torch.cuda.is_available() else 'cpu')
            print('Using device:', device)

            ## Load model
            global pipe
            pipe = StableUnCLIPImg2ImgPipeline.from_pretrained(model_path, torch_dtype=torch.float16, variation="fp16")
            pipe = pipe.to(device)
            # pipe.enable_model_cpu_offload()
            # pipe.enable_vae_slicing()
      Begin Routine:
        ## Generate vectors
        if iteration == 0:
            this_trial_embeddings = np.random.randn(pop_size, vec_size)
        else:
            ## CMA algorithm
            # Use all_embeddings
            this_trial_embeddings = np.random.randn(pop_size, vec_size)

        ## Generate batch of images
        for i in range(pop_size):
            image_name = "images/num-{i}.png"
            embedding = this_trial_embeddings[i,:]
            if not dev_mode:
                generate_image(embedding, image_name)
      End Routine:
        ## Print outputs to txt
        np.savetxt('top_embeddings.txt', all_embeddings.reshape((max_iters*pop_size, vec_size)), delimiter=',')
        np.savetxt('all_ratings.txt', all_ratings, delimiter=',')
Flow
  LoopInitiator generations loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = max_iters
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    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = pop_size
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      Routine trial
      Routine washout
    LoopTerminator trials
    Routine generating
  LoopTerminator generations
